PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = FaceExperiment
  logging level = debug
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Routines
  Routine Welcome
    CodeComponent Select_Cond_Code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        ##so note that if you want to pilot a specific format, just remove the ones you don't want to run from orders & formats
        formats=[1,2,3]

        format=random.choice(formats)
      End Routine:
        Cond_Loop.addData('format_chosen',format)
    TextComponent Welcome_Text
      letterHeight = 1.5
      pos = (0, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Welcome to the experiment!
      units = cm
      wrapWidth = 40
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  Routine Demo_Instructions
    TextComponent Demo_Instructions_Text
      letterHeight = 0.07
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        You have now completed the main task.

        All that remains is a few questions about you.

        Press enter to begin.
    KeyboardComponent Demo_Instructions_Response
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine Ethnicity_1
    TextComponent Ethnicity_Question_1
      letterHeight = 1
      pos = (-12, 8.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
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      text:
        What is your ethnicity?

        (1) Hispanic or Latino

        (2) Not Hispanic or Latino
    KeyboardComponent Ethnicity1
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent Ethnicity_Code_1
      Code Type = Auto->JS
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      Begin Routine:
        Ethnicity_Question_1.alignText='left'
  Routine Race_1
    TextComponent Race_Question_1
      letterHeight = 1
      pos = (.5, 2.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 40
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      text:
        What is your race?

        (1) American Indian/Alaska Native

        (2) Asian

        (3) Native Hawaiian or Other Pacific Islander

        (4) Black or African American

        (5) White

        (6) More than one

        (7) Unknown
    KeyboardComponent Race1
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent Race_Code
      Code Type = Auto->JS
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      Begin Routine:
        Race_Question_1.alignText='left'
  Routine Education_Years_1
    TextComponent Education_Years_Question
      letterHeight = 1
      pos = (.5, 4.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 40
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      text:
        How many years of education have you completed?

        (1) 12 - High School

        (2) 13

        (3) 14

        (4) 15

        (5) 16 - College
    KeyboardComponent Education_Years1
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent Education_Years_Code_1
      Code Type = Auto->JS
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      Begin Routine:
        Education_Years_Question.alignText='left'
  Routine Age_1
    CodeComponent Age_Code_1
      Code Type = Auto->JS
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      Begin Routine:
        Age_Question1.alignText='left'
    TextComponent Age_Question1
      letterHeight = 1
      pos = (1, 10)
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 40
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      text:
        How old are you (in years)?
        Please type two digits and then press next
    TextboxComponent Age_Response1
      bold = False
      color = White
      editable = True
      letterHeight = 1
      lineSpacing = 1
      padding = None
      pos = (-12, 8)
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent ContinueButton
      letterHeight = 1
      pos = (15, -10)
      startVal [time (s)] = 0.0
      text = Next >
      units = cm
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    MouseComponent mouse
      clickable = ContinueButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator Cond_Loop loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine Welcome
  LoopTerminator Cond_Loop
  Routine Demo_Instructions
  Routine Age_1
  Routine Ethnicity_1
  Routine Race_1
  Routine Education_Years_1
