PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = $[-1,-1,-1]
  expName = FaceExperiment
  logging level = debug
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Routines
  Routine Thank_You
    TextComponent Thank_You_Text
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      text = You have completed the experiment. Thank you for participating!
      units = cm
      wrapWidth = 15
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  Routine Welcome
    CodeComponent code_JS
      Code Type = JS
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      Begin JS Experiment:
        function random_character() {
            var chars = "ABC";
            return chars.substr( Math.floor(Math.random() * 3), 1);
        }
        condition = random_character();
    TextComponent Welcome_Text
      letterHeight = 1.5
      pos = (0, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Welcome to the experiment!
      units = cm
      wrapWidth = 40
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  Routine B2_Start
    CodeComponent B2_Code
      Code Type = Auto->JS
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      Begin Routine:
        if Block2.thisN==0:
        #now I'm setting the specific list. See below

        ## importing the excel files for each format associated with block 2
          if format==1:
            B2list="B2_F1.xlsx"
          elif format==2:
            B2list="B2_F2.xlsx"
          elif format==3:
            B2list="B2_F3.xlsx"

        Word="Dummy word"
    CodeComponent B2_Start_Text_Code
      Code Type = Auto->JS
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      Begin Routine:
        B2_Start_Text.alignText='left'
    TextComponent B2_Start_Text
      letterHeight = 1
      pos = (0, 4.5)
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 35
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      text:
        As a reminder, you will be presented with a series of face pairings and your task will be to study the first face of each pair and then you will be asked to indicate if the second face is the same (old) or different (new). Responses will be made using the keyboard and the instructions on the screen will specify which keys correspond to which response.


        Press the SPACE BAR to continue.
    KeyboardComponent B2_Start_Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine B1_Study
    ImageComponent B1_Fixed_Cross
      image = Fixed_Cross.jpg
      pos = (0, .2)
      size = (.05, .05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent B1_Study_Image
      image [set every repeat] = $StudyImage
      pos = (0, 0.1)
      size = (0.60, 0.60)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3.0
      texture resolution = 512
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    ImageComponent B1_Mask_Image
      image = noise.jpg
      pos = (0, 0.1)
      size = (0.62, 0.62)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 2.5
      texture resolution = 512
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    ImageComponent B1_Test_Image
      image [set every repeat] = $TestImage
      pos = (0, .1)
      size = (0.55, 0.55)
      startVal [time (s)] = 7
      texture resolution = 512
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    TextComponent B1_Test_Prompt
      letterHeight = 1
      pos = (0, -8)
      startVal [time (s)] = 7
      text = Old (1)                       New (0)
      units = cm
      wrapWidth = 40
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    KeyboardComponent B1_Test_Response
      allowedKeys = '1', '0'
      forceEndRoutine = True
      startVal [time (s)] = 7
      store = first key
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  Routine B1_End
    CodeComponent B1_End_Code
      Code Type = Auto->JS
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      Begin Routine:
        B1_End_Text.alignText='left'
    TextComponent B1_End_Text
      letterHeight = 1
      pos = (-1, 5.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = cm
      wrapWidth = 33
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      text:
        Congratulations, you have completed half the experiment. You will have 2 minutes to take a break and stretch before completing the remainder of the experiment.

        After 2 minutes, a screen will appear, and you will be asked to press the SPACE BAR to continue.
    TextComponent B1_End_Text_2
      letterHeight = 1
      pos = (0, 3)
      startVal [time (s)] = 120
      units = cm
      wrapWidth = 35
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      text:
        Your 2 minute break period is finished.

        Press the SPACE BAR to continue.
    KeyboardComponent B1_End_Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 120
      store = first key
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  Routine B2_Study
    ImageComponent B2_Fixed_Cross
      image = Fixed_Cross.jpg
      pos = (0, .2)
      size = (.05, .05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent B2_Study_Image
      image [set every repeat] = $StudyImage
      pos = (0, 0.1)
      size = (0.60, 0.60)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3.0
      texture resolution = 512
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    ImageComponent B2_Mask_Image
      image = noise.jpg
      size = (1.75, 1.75)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 2.5
      texture resolution = 512
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    ImageComponent B2_Test_Image
      image [set every repeat] = $TestImage
      pos = (0, .1)
      size = (0.60, 0.60)
      startVal [time (s)] = 7
      texture resolution = 512
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    TextComponent B2_Test_Prompt
      letterHeight = 1
      pos = (0, -8)
      startVal [time (s)] = 7
      text = Old (1)                       New (0)
      units = cm
      wrapWidth = 40
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    KeyboardComponent B2_Test_Response
      allowedKeys = '1', '0'
      forceEndRoutine = True
      startVal [time (s)] = 7
      store = first key
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  Routine ITI
    ImageComponent Blank_Image
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine Demo_Instructions
    CodeComponent Demo_Instructions_Code
      Code Type = Auto->JS
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      Begin Routine:
        Demo_Instructions_Text.alignText='left'
    TextComponent Demo_Instructions_Text
      letterHeight = 1
      pos = (-1, 6.5)
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 33
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      text:
        You have now completed the main task. All that remains is a few questions about you.

        Press SPACE BAR to continue.
    KeyboardComponent Demo_Instructions_Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
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  Routine Gender
    CodeComponent Gender_Code
      Code Type = Auto->JS
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      Begin Routine:
        Gender_Question.alignText='left'
    TextComponent Gender_Question
      letterHeight = 1
      pos = (2.5,3.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 25
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      text:
        What is your gender?
        Please press the number on your keyboard with the response option that that best corresponds to you.

        (1) Woman

        (2) Man

        (3) Non-binary

        (4) Prefer not to say
    KeyboardComponent Gender1
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = first key
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  Routine Age
    CodeComponent Age_Code
      Code Type = Auto->JS
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      Begin Routine:
        Age_Question.alignText='left'
    TextComponent Age_Question
      letterHeight = 1
      pos = (10, 8.5)
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 40
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      text:
        How old are you (in years)?
        Please type two digits and then press next
    TextboxComponent Age_Response
      bold = False
      color = White
      editable = True
      letterHeight = 1
      lineSpacing = 1
      padding = None
      pos = (-3, 6)
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent ContinueButton
      letterHeight = 1
      pos = (17, -10)
      startVal [time (s)] = 0.0
      text = Next >>
      units = cm
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    MouseComponent mouse
      clickable = ContinueButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Ethnicity
    TextComponent Ethnicity_Question_1
      letterHeight = 1
      pos = (2.5, 5.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 25
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      text:
        What is your ethnicity?
        Please press the number on your keyboard with the response option that that best corresponds to you.

        (1) Hispanic or Latino

        (2) Not Hispanic or Latino
    KeyboardComponent Ethnicity1
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = first key
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    CodeComponent Ethnicity_Code_1
      Code Type = Auto->JS
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      Begin Routine:
        Ethnicity_Question_1.alignText='left'
  Routine Race
    TextComponent Race_Question_1
      letterHeight = 1
      pos = (2.5,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 25
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      text:
        What is your race?
        Please press the number on your keyboard with the response option that that best corresponds to you.

        (1) American Indian/Alaska Native

        (2) Asian

        (3) Native Hawaiian or Other Pacific Islander

        (4) Black or African American

        (5) White

        (6) More than one

        (7) Unknown
    KeyboardComponent Race1
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = first key
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    CodeComponent Race_Code
      Code Type = Auto->JS
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      Begin Routine:
        Race_Question_1.alignText='left'
  Routine Education_Years
    TextComponent Education_Years_Question
      letterHeight = 1
      pos = (2.5,2.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 25
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      text:
        How many years of education have you completed?
        Please press the number on your keyboard with the response option that that best corresponds to you.

        (1) 12 - High School

        (2) 13

        (3) 14

        (4) 15

        (5) 16 - College
    KeyboardComponent Education_Years1
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = first key
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    CodeComponent Education_Years_Code_1
      Code Type = Auto->JS
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      Begin Routine:
        Education_Years_Question.alignText='left'
  Routine Task_Instructions
    CodeComponent Task_Instruction_Code
      Code Type = Auto->JS
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      Begin Routine:
        Task_Instructions_Text.alignText='left'
    TextComponent Task_Instructions_Text
      letterHeight = 1
      pos = (0, 3)
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 35
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      text:
        In this experiment, you will see a fixation cross followed by a series of face pairings. The pairs of faces will be presented sequentially, with each face being separated by a mask. Your task will be to study the first face of each pair and then you will be asked to indicate if the second face is the same (old) or different (new). Responses will be made using the keyboard and the instructions on the screen will specify which keys correspond to which response.


        Press the SPACE BAR to see an example.
    KeyboardComponent Task_Instructions_Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Example_Slide
    ImageComponent Example_Image
      image = Example.jpg
      size = (1.6, .9)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent Example_Image_Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
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Flow
  LoopInitiator Cond_Loop loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine Welcome
  LoopTerminator Cond_Loop
  LoopInitiator Block1 loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine Task_Instructions
    Routine Example_Slide
    LoopInitiator B1_Trial loopType="TrialHandler"
      conditionsFile = $B1list
      loopType = random
      nReps = 1
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      Routine B1_Study
    LoopTerminator B1_Trial
    Routine B1_End
  LoopTerminator Block1
  LoopInitiator Block2 loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine B2_Start
    LoopInitiator B2_Trial loopType="TrialHandler"
      conditionsFile = $B2list
      loopType = random
      nReps = 1
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      Routine B2_Study
    LoopTerminator B2_Trial
  LoopTerminator Block2
  Routine Demo_Instructions
  Routine Age
  Routine Gender
  Routine Ethnicity
  Routine Race
  Routine Education_Years
  Routine Thank_You
